PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 3.2.  2.28 psyexp
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine inst
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    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        在该任务中，你需要将
        屏幕上呈现的数字和5比
        大小，
        如果比5大请按“F”键，
        如果比5小则按"J"键。
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine sti
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $number
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = "f","j"
      correctAns = corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine rest
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    TextComponent resting
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        休息一下，如果休息
        完毕
        请按空格键继续测试~
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
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    TextComponent endding
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 您好，此阶段测试已完成。
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 1.csv
    loopType = random
    nReps = 50
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    conditions:
      [OrderedDict([('number', 1), ('corrAns', 'f')]),
      OrderedDict([('number', 2), ('corrAns', 'f')]),
      OrderedDict([('number', 3), ('corrAns', 'f')]),
      OrderedDict([('number', 4), ('corrAns', 'f')]),
      OrderedDict([('number', 6), ('corrAns', 'j')]),
      OrderedDict([('number', 7), ('corrAns', 'j')]),
      OrderedDict([('number', 8), ('corrAns', 'j')]),
      OrderedDict([('number', 9), ('corrAns', 'j')])]
    Routine fixation
    Routine sti
  LoopTerminator trials
  Routine End
